Journal

Version VersionNumber=2.4
Targeted Illumination
  IlluminationSetting = "[None]" Override=None OverrideVariable=Illumination setting
  ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
  CoordinateSetting = "100x" Override=None OverrideVariable=Coordinate system setting
  PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
  PositionImageCoordinatesX = 102 Override=None OverrideVariable=Position: image coordinate X
  PositionImageCoordinatesY = 222 Override=None OverrideVariable=Position: image coordinate Y
  NumberOfLaserFires = 2 Override=None OverrideVariable=Number of laser pulses
  NeutralDensitySetting = 20 Override=Variable OverrideVariable=PercentTransmittance
  dExpDurMS = 10 Override=None OverrideVariable=Mask Exposure Duration [ms]
  PointSize = 1
Disabled Targeted Illumination
  IlluminationSetting = "[None]" Override=None OverrideVariable=Illumination setting
  ImageIlluminationSetting = "" Override=None OverrideVariable=Imaging Illumination setting
  CoordinateSetting = "100x" Override=None OverrideVariable=Coordinate system setting
  PositionSetting = 3 Override=None OverrideVariable=Position: setting (1=image coords, 2=center of active region, 3=all region centers)
  PositionImageCoordinatesX = 166 Override=None OverrideVariable=Position: image coordinate X
  PositionImageCoordinatesY = 326 Override=None OverrideVariable=Position: image coordinate Y
  NumberOfLaserFires = 20 Override=None OverrideVariable=Number of laser pulses
  NeutralDensitySetting = 100 Override=None OverrideVariable=Attenuator plate: % transmission
  dExpDurMS = 10 Override=None OverrideVariable=Mask Exposure Duration [ms]
  PointSize = 1 Override=None OverrideVariable=Point size
Assign Variable
  MDA.IntervalInSec = 10
Region Measurements
  imSource = m 1 5 9 0 1 -1 -1 8 Acquired
  nSelectorPlane = 9
  nTab = 2
  nPopInclude = 0
  nDisplayViews = 0
  nRegionLabel = 1
  nChannel = 0
  bUseThreshold = FALSE
  abMeasurements = FALSE TRUE TRUE TRUE TRUE FALSE FALSE FALSE FALSE FALSE FALSE TRUE TRUE TRUE TRUE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE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
  abRegionLabels = FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE FALSE
  nSpecifiedPlane = 1
  nPopGraphType = 0
  anPopGraphXAxis = 0 0 0 0
  anPopGraphYAxis = 0 0 0 0
  nGraphNumBin = 10
  nPopGraphUnit = 0
  strGraphSettings = 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
  bLogCalibration = TRUE
  bLogHeaders = TRUE
Log Variable
  nLogType = 1
  stVariable = "PercentTransmittance"
  bOneLine = FALSE
  bLogHeader = FALSE
