Journal
Description: This journal creates maximum intensity projections in the red and green channels (no streaming) and then displays them live. Meant to be done at the end of z-series.
Version VersionNumber=2.4
Stack Arithmetic
  iOperation = 3
  imStack = "%Green%"
  imResult = "%MaxGreen%"
MaxGREENstackName = Image.Name+"_"+Image.StageLabel+"_stack"
Add Plane
  imSrcImage = m 1 7 9 0 1 1 0 8 Untitled
  imDstImage = "%MaxGREENstackName%"
  bCloseAfterAdding = FALSE
  nSrcPlane = 9
Close
  im = m 1 7 9 0 1 1 0 8 Acquired
  bSaveIt = FALSE
Stack Arithmetic
  iOperation = 3
  imStack = "%Red%"
  imResult = "%MaxRed%"
MaxREDstackName = Image.Name+"_"+Image.StageLabel+"_stack"
Add Plane
  imSrcImage = m 1 7 9 0 1 4 0 8 Untitled
  imDstImage = "%MaxREDstackName%"
  bCloseAfterAdding = FALSE
  nSrcPlane = 9
Close
  im = m 1 7 9 0 1 4 0 8 Acquired
  bSaveIt = FALSE
Stack Arithmetic
  iOperation = 3
  imStack = "%Blue%"
  imResult = "%MaxBlue%"
Disabled Assign Variable
  MaxBluestackName = Image.Name+"_"+Image.StageLabel+"_stack"
MaxBluestackName = Image.Name+"_"+Image.StageLabel+"_stack"
Add Plane
  imSrcImage = m 1 7 9 0 1 7 0 8 Untitled
  imDstImage = "%MaxBluestackName%"
  bCloseAfterAdding = FALSE
  nSrcPlane = 9
Close
  im = m 1 7 9 0 1 7 0 8 Acquired
  bSaveIt = FALSE
